# Generated by Configurator on Mon Aug 03 12:24:05 CDT 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,VarispecLCTF,VarispecLCTF,VarispecLCTF

# Pre-init settings for devices
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,9600
Property,COM11,DataBits,8
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Fast USB to Serial,Disable
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,XCite-Exacte,Port,COM11
Property,VarispecLCTF,Baud Rate,9600
Property,VarispecLCTF,Port,COM10

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays
Delay,VarispecLCTF,50.0

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,XCite-Exacte
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,VarispecLCTF,Device Delay (ms.),50.0000
ConfigGroup,System,Startup,XCite-Exacte,Front-Panel-Lock,True
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeXY,1
ConfigGroup,System,Startup,XCite-Exacte,Shutter-State,Closed
ConfigGroup,System,Startup,VarispecLCTF,Wavelength,560.0000
ConfigGroup,System,Startup,XCite-Exacte,Lamp-Intensity,50

# Preset: Shutdown
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TransposeXY,1
ConfigGroup,System,Shutdown,XCite-Exacte,Front-Panel-Lock,False
ConfigGroup,System,Shutdown,XCite-Exacte,Shutter-State,Closed
ConfigGroup,System,Shutdown,VarispecLCTF,Device Delay (ms.),50.0000
ConfigGroup,System,Shutdown,VarispecLCTF,Wavelength,579.8400
ConfigGroup,System,Shutdown,XCite-Exacte,Lamp-Intensity,10


# Group: Lamp
# Preset: NewPreset
ConfigGroup,Lamp,NewPreset,XCite-Exacte,Lamp-Intensity,50


# Group: wv
# Preset: NewPreset
ConfigGroup,wv,NewPreset,VarispecLCTF,Wavelength,550.0000



# PixelSize settings
# Resolution preset: 63x
ConfigPixelSize,63x,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,63x,0.254
PixelSizeAffine,63x,1.0,0.0,0.0,0.0,1.0,0.0

