# Generated by Configurator on Tue Mar 23 15:41:18 CDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM24,SerialManager,COM24
Device,COM10,SerialManager,COM10
Device,Hamamatsu,HamamatsuHam,HamamatsuHam_DCAM
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,XCite-Exacte,XCite120PC_Exacte,XCite-Exacte
Device,VarispecLCTF,VarispecLCTF,VarispecLCTF

# Pre-init settings for devices
Property,COM24,AnswerTimeout,500.0000
Property,COM24,BaudRate,9600
Property,COM24,DataBits,8
Property,COM24,DelayBetweenCharsMs,0.0000
Property,COM24,Handshaking,Off
Property,COM24,Parity,None
Property,COM24,StopBits,1
Property,COM24,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM10,DataBits,8
Property,XCite-Exacte,Port,COM10
Property,VarispecLCTF,Baud Rate,9600
Property,VarispecLCTF,Port,COM24

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TINosePiece,800.0
Delay,TIFilterBlock1,800.0
Delay,TILightPath,800.0
Delay,XCite-Exacte,10.0
Delay,VarispecLCTF,50.0

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,Hamamatsu
Property,Core,Shutter,XCite-Exacte
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Apo TIRF 100x NA 1.49 Oil
Label,TINosePiece,4,5-Unknown
Label,TINosePiece,3,4-Plan Apo 4x NA 0.20 Dry
Label,TINosePiece,2,3-Plan Apo 20x NA 0.75 Dry
Label,TINosePiece,1,2-Plan Apo 60x NA 1.40 Oil
Label,TINosePiece,0,1-Plan Fluor 60x NA 1.25 Oil
# TIFilterBlock1
Label,TIFilterBlock1,5,6-40X P
Label,TIFilterBlock1,4,5-Cy5
Label,TIFilterBlock1,3,4-Cy3
Label,TIFilterBlock1,2,3-FITC
Label,TIFilterBlock1,1,2-DAPI
Label,TIFilterBlock1,0,1-BF
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: PFS
# Preset: On
ConfigGroup,PFS,On,TIPFSStatus,State,On

# Preset: Off
ConfigGroup,PFS,Off,TIPFSStatus,State,Off


# Group: ImagingConfigs
# Preset: LCTFCam
ConfigGroup,ImagingConfigs,LCTFCam,TILightPath,Label,2-Left100
ConfigGroup,ImagingConfigs,LCTFCam,Core,Camera,Hamamatsu


# Group: Filter
# Preset: 4-Cy3
ConfigGroup,Filter,4-Cy3,TIFilterBlock1,Label,4-Cy3

# Preset: 5-Cy5
ConfigGroup,Filter,5-Cy5,TIFilterBlock1,Label,5-Cy5

# Preset: 3-FITC
ConfigGroup,Filter,3-FITC,TIFilterBlock1,Label,3-FITC

# Preset: 6-40X P
ConfigGroup,Filter,6-40X P,TIFilterBlock1,Label,6-40X P

# Preset: 2-DAPI
ConfigGroup,Filter,2-DAPI,TIFilterBlock1,Label,2-DAPI

# Preset: 1-BF
ConfigGroup,Filter,1-BF,TIFilterBlock1,Label,1-BF


# Group: Objective
# Preset: 3-Plan Apo 20x NA 0.75 Dry
ConfigGroup,Objective,3-Plan Apo 20x NA 0.75 Dry,TINosePiece,Label,3-Plan Apo 20x NA 0.75 Dry

# Preset: 6-Apo TIRF 100x NA 1.49 Oil
ConfigGroup,Objective,6-Apo TIRF 100x NA 1.49 Oil,TINosePiece,Label,6-Apo TIRF 100x NA 1.49 Oil

# Preset: 4-Plan Apo 4x NA 0.20 Dry
ConfigGroup,Objective,4-Plan Apo 4x NA 0.20 Dry,TINosePiece,Label,4-Plan Apo 4x NA 0.20 Dry

# Preset: 2-Plan Apo 60x NA 1.40 Oil
ConfigGroup,Objective,2-Plan Apo 60x NA 1.40 Oil,TINosePiece,Label,2-Plan Apo 60x NA 1.40 Oil

# Preset: 5-Unknown
ConfigGroup,Objective,5-Unknown,TINosePiece,Label,5-Unknown

# Preset: 1-Plan Fluor 60x NA 1.25 Oil
ConfigGroup,Objective,1-Plan Fluor 60x NA 1.25 Oil,TINosePiece,Label,1-Plan Fluor 60x NA 1.25 Oil


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Hamamatsu,Binning,2x2
ConfigGroup,System,Startup,XCite-Exacte,Front-Panel-Lock,True
ConfigGroup,System,Startup,TILightPath,Label,2-Left100
ConfigGroup,System,Startup,TIXYDrive,SpeedX,6
ConfigGroup,System,Startup,TIXYDrive,SpeedY,6
ConfigGroup,System,Startup,Hamamatsu,TransposeXY,1
ConfigGroup,System,Startup,TIXYDrive,TransposeMirrorX,1
ConfigGroup,System,Startup,Hamamatsu,OUTPUT TRIGGER KIND[0],PROGRAMABLE
ConfigGroup,System,Startup,Hamamatsu,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,Hamamatsu,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Startup,Hamamatsu,MASTER PULSE MODE,CONTINUOUS
ConfigGroup,System,Startup,Hamamatsu,MASTER PULSE TRIGGER SOURCE,SOFTWARE
ConfigGroup,System,Startup,Hamamatsu,TRIGGER SOURCE,INTERNAL
ConfigGroup,System,Startup,Hamamatsu,MASTER PULSE INTERVAL,0.0001
ConfigGroup,System,Startup,VarispecLCTF,Device Delay (ms.),50.0000
ConfigGroup,System,Startup,Hamamatsu,OUTPUT TRIGGER PERIOD[0],0.0010
ConfigGroup,System,Startup,TINosePiece,Label,6-Apo TIRF 100x NA 1.49 Oil


# Group: LED Power
# Preset: NewPreset
ConfigGroup,LED Power,NewPreset,XCite-Exacte,Lamp-Intensity,10


# Group: Wavelength
# Preset: NewPreset
ConfigGroup,Wavelength,NewPreset,VarispecLCTF,Wavelength,500.0000



# PixelSize settings
# Resolution preset: 60xNA1.25
ConfigPixelSize,60xNA1.25,TINosePiece,Label,1-Plan Fluor 60x NA 1.25 Oil
ConfigPixelSize,60xNA1.25,Core,Camera,Hamamatsu
PixelSize_um,60xNA1.25,0.1083333
PixelSizeAffine,60xNA1.25,0.1083333,0.0,0.0,0.0,0.1083333,0.0
# Resolution preset: 4xpsf
ConfigPixelSize,4xpsf,TINosePiece,Label,4-Plan Apo 4x NA 0.20 Dry
ConfigPixelSize,4xpsf,Core,Camera,Hamamatsu
PixelSize_um,4xpsf,1.6157
PixelSizeAffine,4xpsf,6.412849603589081E-4,1.6166708451026333,0.0,-1.6147686939425248,2.8359012218563055E-4,0.0
# Resolution preset: 20x
ConfigPixelSize,20x,TINosePiece,Label,3-Plan Apo 20x NA 0.75 Dry
ConfigPixelSize,20x,Core,Camera,Hamamatsu
PixelSize_um,20x,0.325
PixelSizeAffine,20x,0.325,0.0,0.0,0.0,0.325,0.0
# Resolution preset: 60xpfs
ConfigPixelSize,60xpfs,TINosePiece,Label,2-Plan Apo 60x NA 1.40 Oil
ConfigPixelSize,60xpfs,Core,Camera,Hamamatsu
PixelSize_um,60xpfs,0.1083333333
PixelSizeAffine,60xpfs,0.1083333333,0.0,0.0,0.0,0.1083333333,0.0
# Resolution preset: 100x
ConfigPixelSize,100x,TINosePiece,Label,6-Apo TIRF 100x NA 1.49 Oil
ConfigPixelSize,100x,Core,Camera,Hamamatsu
PixelSize_um,100x,0.065
PixelSizeAffine,100x,0.065,0.0,0.0,0.0,0.065,0.0

