# Generated by Configurator on Wed Mar 10 13:32:57 CST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,Ti2-E,NikonTi2,Ti2-E__0
Device,ZDrive,NikonTi2,ZDrive
Device,XYStage,NikonTi2,XYStage
Device,Nosepiece,NikonTi2,Nosepiece
Device,CondenserTurret,NikonTi2,CondenserTurret
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,TransmissionLamp,NikonTi2,DiaLamp
Device,OrcaFlash2_8,HamamatsuHam,HamamatsuHam_DCAM
Device,FilterTurret2,NikonTi2,FilterTurret2
Device,Turret2Shutter,NikonTi2,Turret2Shutter
Device,Kurios LCTF,KuriosLCTF,Kurios LCTF
Device,OrcaFlash4v3,HamamatsuHam,HamamatsuHam_DCAM
Device,Turbo/XT600 Controller,XCiteXT600,Turbo/XT600 Controller
Device,LED1 Device,XCiteXT600,LED1 Device

# Pre-init settings for devices
Property,Kurios LCTF,ComPort,01212477::THORLABS KURIOS VID:0x0403 PID:0x6001
Property,Turbo/XT600 Controller,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,115200
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references
Parent,ZDrive,Ti2-E
Parent,XYStage,Ti2-E
Parent,Nosepiece,Ti2-E
Parent,CondenserTurret,Ti2-E
Parent,FilterTurret1,Ti2-E
Parent,Turret1Shutter,Ti2-E
Parent,LightPath,Ti2-E
Parent,PFS,Ti2-E
Parent,PFSOffset,Ti2-E
Parent,IntermediateMagnification,Ti2-E
Parent,TransmissionLamp,Ti2-E
Parent,FilterTurret2,Ti2-E
Parent,Turret2Shutter,Ti2-E

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,OrcaFlash4v3
Property,Core,Shutter,Turret1Shutter
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-
Label,Nosepiece,4,5-Plan Fluor 4x
Label,Nosepiece,3,4-
Label,Nosepiece,2,3-
Label,Nosepiece,1,2-Apo TIRF 100x Oil
Label,Nosepiece,0,1-Plan Apo Lmbd 60x Oil
# CondenserTurret
Label,CondenserTurret,6,7-
Label,CondenserTurret,5,6-
Label,CondenserTurret,4,5-
Label,CondenserTurret,3,4-
Label,CondenserTurret,2,3-Shutter
Label,CondenserTurret,1,2-ND
Label,CondenserTurret,0,1-OPEN
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-DAPI
Label,FilterTurret1,3,4-BF
Label,FilterTurret1,2,3-CY5
Label,FilterTurret1,1,2-dsRed RFP
Label,FilterTurret1,0,1-GFP
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# FilterTurret2
Label,FilterTurret2,5,6-Empty
Label,FilterTurret2,4,5-Empty
Label,FilterTurret2,3,4-Empty
Label,FilterTurret2,2,3-Empty
Label,FilterTurret2,1,2-Empty
Label,FilterTurret2,0,1-Empty

# Configuration presets
# Group: ImgConfig
# Preset: Standard
ConfigGroup,ImgConfig,Standard,LightPath,Label,2-R100
ConfigGroup,ImgConfig,Standard,Core,Camera,OrcaFlash2_8

# Preset: Spectral
ConfigGroup,ImgConfig,Spectral,LightPath,Label,4-L100
ConfigGroup,ImgConfig,Spectral,Core,Camera,OrcaFlash4v3


# Group: Channel

# Group: System
# Preset: Shutdown
ConfigGroup,System,Shutdown,OrcaFlash4v3,Binning,2x2
ConfigGroup,System,Shutdown,Turbo/XT600 Controller,X.11 Front Panel (1=Lock 0=Unlock),0
ConfigGroup,System,Shutdown,Core,Shutter,Turret1Shutter
ConfigGroup,System,Shutdown,LED1 Device,L.14 On/Off State (1=On 0=Off),0
ConfigGroup,System,Shutdown,FilterTurret1,Label,2-dsRed RFP

# Preset: Startup
ConfigGroup,System,Startup,OrcaFlash4v3,Binning,2x2
ConfigGroup,System,Startup,Turbo/XT600 Controller,X.11 Front Panel (1=Lock 0=Unlock),1
ConfigGroup,System,Startup,Core,Shutter,Turret1Shutter
ConfigGroup,System,Startup,LED1 Device,L.14 On/Off State (1=On 0=Off),1
ConfigGroup,System,Startup,FilterTurret1,Label,4-BF


# Group: wv
# Preset: NewPreset
ConfigGroup,wv,NewPreset,Kurios LCTF,Wavelength,550


# Group: LED
# Preset: NewPreset
ConfigGroup,LED,NewPreset,LED1 Device,L.15 Intensity (0.0 or 5.0 - 100.0)%,5.0000


# Group: Camera
# Preset: Left
ConfigGroup,Camera,Left,Core,Camera,OrcaFlash4v3
ConfigGroup,Camera,Left,LightPath,Label,4-L100

# Preset: Right
ConfigGroup,Camera,Right,Core,Camera,OrcaFlash2_8
ConfigGroup,Camera,Right,LightPath,Label,2-R100


# Group: Upper Filter
# Preset: BF
ConfigGroup,Upper Filter,BF,FilterTurret2,Label,5-Empty

# Preset: GFP
ConfigGroup,Upper Filter,GFP,FilterTurret2,Label,2-Empty

# Preset: DAPI
ConfigGroup,Upper Filter,DAPI,FilterTurret2,Label,1-Empty

# Preset: DSRed
ConfigGroup,Upper Filter,DSRed,FilterTurret2,Label,3-Empty

# Preset: 6-Empty
ConfigGroup,Upper Filter,6-Empty,FilterTurret2,Label,6-Empty

# Preset: CY5
ConfigGroup,Upper Filter,CY5,FilterTurret2,Label,4-Empty


# Group: bw
# Preset: Wide
ConfigGroup,bw,Wide,Kurios LCTF,Sequence Bandwidth,Wide
ConfigGroup,bw,Wide,Kurios LCTF,Bandwidth,Wide

# Preset: Medium
ConfigGroup,bw,Medium,Kurios LCTF,Sequence Bandwidth,Medium
ConfigGroup,bw,Medium,Kurios LCTF,Bandwidth,Medium

# Preset: Narrow
ConfigGroup,bw,Narrow,Kurios LCTF,Sequence Bandwidth,Narrow
ConfigGroup,bw,Narrow,Kurios LCTF,Bandwidth,Narrow


# Group: Lower Filter
# Preset: 3-
ConfigGroup,Lower Filter,3-,FilterTurret1,Label,3-CY5

# Preset: 4-
ConfigGroup,Lower Filter,4-,FilterTurret1,Label,4-BF

# Preset: 5-
ConfigGroup,Lower Filter,5-,FilterTurret1,Label,5-DAPI

# Preset: 6-
ConfigGroup,Lower Filter,6-,FilterTurret1,Label,6-Empty

# Preset: 1-
ConfigGroup,Lower Filter,1-,FilterTurret1,Label,1-GFP

# Preset: 2-
ConfigGroup,Lower Filter,2-,FilterTurret1,Label,2-dsRed RFP



# PixelSize settings
# Resolution preset: StandardCam100x
ConfigPixelSize,StandardCam100x,Nosepiece,Label,2-Apo TIRF 100x Oil
ConfigPixelSize,StandardCam100x,Core,Camera,OrcaFlash2_8
PixelSize_um,StandardCam100x,0.0515
PixelSizeAffine,StandardCam100x,-3.890163826592851E-4,-0.051455159655668846,0.0,-0.051519940820030294,3.33595414868219E-4,0.0
# Resolution preset: Spectral100x
ConfigPixelSize,Spectral100x,Nosepiece,Label,2-Apo TIRF 100x Oil
ConfigPixelSize,Spectral100x,Core,Camera,OrcaFlash4v3
PixelSize_um,Spectral100x,0.0649
PixelSizeAffine,Spectral100x,-6.904141847296916E-5,-0.06486995215873669,0.0,-0.06489844768838995,-6.316740972389272E-6,0.0

